OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)

Acquisition client => #0
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Timeline generator => #2
  Lua Script = E:/Diss/Paradigm/timeline.lua
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "phoneme stimuli" => #3
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_00
Input stream=#3 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/stimuli.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Sound Player "Ambulance"
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = E:/Diss/Paradigm/wavs/Ambulance_audio.wav
  Loop = false
#2 -> Sound Player "Srop"
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = E:/Diss/Paradigm/wavs/Stop_audio.wav
  Loop = false
#2 -> Sound Player "Toilet"
  PLAY trigger = OVTK_StimulationId_Label_03
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = E:/Diss/Paradigm/wavs/Toilet_audio.wav
  Loop = false
#2 -> Sound Player "Water"
  PLAY trigger = OVTK_StimulationId_Label_04
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = E:/Diss/Paradigm/wavs/Water_audio.wav
  Loop = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking1" => #9
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
Input stream=#9 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking1.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking2" => #11
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_1
Input stream=#11 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking2.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking3" => #13
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_2
Input stream=#13 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking3.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking4" => #15
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_3
Input stream=#15 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking4.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking5" => #17
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Stage_4
Input stream=#17 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking5.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking6" => #19
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_class7
Input stream=#19 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking6.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking7" => #21
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_class8
Input stream=#21 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking7.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking8" => #23
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_class9
Input stream=#23 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking8.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking9" => #25
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_class10
Input stream=#25 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking9.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "speaking10" => #27
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_class11
Input stream=#27 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/speaking10.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = E:/Diss/Paradigm/imgs/Ambulance_audio.jpg
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = E:/Diss/Paradigm/imgs/Stop_audio.jpg
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = E:/Diss/Paradigm/imgs/Toilet_audio.jpg
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = E:/Diss/Paradigm/imgs/Water_audio.jpg
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = E:/Diss/Paradigm/imgs/Ambulance_text.png
  Stimulation 5 = OVTK_StimulationId_Label_0A
  Cue Image 6 = E:/Diss/Paradigm/imgs/Stop_text.png
  Stimulation 6 = OVTK_StimulationId_Label_0B
  Cue Image 7 = E:/Diss/Paradigm/imgs/Toilet_text.png
  Stimulation 7 = OVTK_StimulationId_Label_0C
  Cue Image 8 = E:/Diss/Paradigm/imgs/Water_text.png
  Stimulation 8 = OVTK_StimulationId_Label_0D
  Cue Image 9 = E:/Diss/Paradigm/imgs/ambulance.png
  Stimulation 9 = OVTK_StimulationId_Label_1A
  Cue Image 10 = E:/Diss/Paradigm/imgs/Stop.jpg
  Stimulation 10 = OVTK_StimulationId_Label_1B
  Cue Image 11 = E:/Diss/Paradigm/imgs/Toilet.png
  Stimulation 11 = OVTK_StimulationId_Label_1C
  Cue Image 12 = E:/Diss/Paradigm/imgs/Water.jpg
  Stimulation 12 = OVTK_StimulationId_Label_1D
  Cue Image 13 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 13 = OVTK_StimulationId_Label_DD
  Cue Image 14 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 14 = OVTK_StimulationId_Label_DE
  Cue Image 15 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 15 = OVTK_StimulationId_Label_DF
  Cue Image 16 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 16 = OVTK_StimulationId_Label_23
  Cue Image 17 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 17 = OVTK_StimulationId_Label_21
  Cue Image 18 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 18 = OVTK_StimulationId_Label_12
  Cue Image 19 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 19 = OVTK_StimulationId_Label_13
  Cue Image 20 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 20 = OVTK_StimulationId_Label_14
  Cue Image 21 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 21 = OVTK_StimulationId_Label_15
  Cue Image 22 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 22 = OVTK_StimulationId_Number_16
  Cue Image 23 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 23 = OVTK_StimulationId_Label_17
  Cue Image 24 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 24 = OVTK_StimulationId_Label_18
  Cue Image 25 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 25 = OVTK_StimulationId_Label_19
  Cue Image 26 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 26 = OVTK_StimulationId_Label_22
  Cue Image 27 = E:/Diss/Paradigm/imgs/speaking1.png
  Stimulation 27 = OVTK_GDF_class7
  Cue Image 28 = E:/Diss/Paradigm/imgs/speaking2.png
  Stimulation 28 = OVTK_GDF_class8
  Cue Image 29 = E:/Diss/Paradigm/imgs/speaking3.png
  Stimulation 29 = OVTK_GDF_class9
  Cue Image 30 = E:/Diss/Paradigm/imgs/speaking4.png
  Stimulation 30 = OVTK_GDF_class10
  Cue Image 31 = E:/Diss/Paradigm/imgs/speaking5.png
  Stimulation 31 = OVTK_GDF_class11
  Cue Image 32 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 32 = OVTK_StimulationId_Number_00
  Cue Image 33 = E:/Diss/Paradigm/imgs/speaking2.png
  Stimulation 33 = OVTK_GDF_Stage_1
  Cue Image 34 = E:/Diss/Paradigm/imgs/speaking3.png
  Stimulation 34 = OVTK_GDF_Stage_2
  Cue Image 35 = E:/Diss/Paradigm/imgs/speaking4.png
  Stimulation 35 = OVTK_GDF_Stage_3
  Cue Image 36 = E:/Diss/Paradigm/imgs/speaking5.png
  Stimulation 36 = OVTK_GDF_Stage_4
  Cue Image 37 = E:/Diss/Paradigm/imgs/pencil_image.jpg
  Stimulation 37 = OVTK_GDF_VEP
  Cue Image 38 = E:/Diss/Paradigm/imgs/break_image.png
  Stimulation 38 = OVTK_StimulationId_Target
  Cue Image 39 = E:/Diss/Paradigm/imgs/speaking1.png
  Stimulation 39 = OVTK_GDF_Tongue
  Cue Image 40 = E:/Diss/Paradigm/imgs/rest.png
  Stimulation 40 = OVTK_StimulationId_RestStart
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "rest" => #30
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_RestStart
Input stream=#30 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/resting.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#0.Signal stream, Input stimulations=#2 -> Stimulation based epoching "break" => #32
  Epoch duration (in sec) = 60
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
Input stream=#32 -> CSV File Writer
  Filename = E:/Diss/Paradigm/experiments/break.csv
  Precision = 10
  Append data = false
  Only last matrix = false
